PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['SubjectCode'], expName, expInfo['date'])
  Experiment info = {'SubjectName': '', 'SubjectCode': '', 'Gender': '', 'Age': '', 'Handedness': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = project1
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Routines
  Routine instruction1
    PolygonComponent polyback1
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent instruction1image
      image = images\instruction1
      saveStartStop = False
      size = (1.1,0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructionKey1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent Varcheck
      saveStartStop = False
      startExpValue = 0
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    VariableComponent movieArray
      saveStartStop = False
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    VariableComponent movieG
      saveStartStop = False
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    VariableComponent movieType
      saveStartStop = False
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    VariableComponent negative
      startExpValue = 16
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    VariableComponent posetive
      startExpValue = 8
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    VariableComponent correct
      startExpValue = 7
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        movieArray=[]
        movieG=[]
        movieType=[]
  Routine instruction2
    PolygonComponent polyback2
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent instruction2image
      image = images\instruction2
      saveStartStop = False
      size = (1,0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction2key2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruction4
    PolygonComponent polyback4
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent instruction4image
      image = images\instruction4.jpg
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction4key1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PlusRoutine
    PolygonComponent polybackplus
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent plustext
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine ShowMovie
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $MovieName
      saveStartStop = False
      size [set every repeat] = $MovieSize
      startVal [time (s)] = 0.0
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  Routine SAMpart1
    PolygonComponent polybacksampart1
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        def SAM(sam):
            if sam>=4.5 and sam<5.5:
                sam=5
                return sam
            if sam>=5.5 and sam<6.5:
                sam=6
                return sam
            if sam>=6.5 and sam<7.5:
                sam=7
                return sam
            if sam<1.5:
                sam=1
                return sam

            if sam>=1.5 and sam<2.5:
                sam=2
                return sam
            if sam>=2.5 and sam<3.5:
                sam=3
                return sam
            if sam>=3.5 and sam<4.5:
                sam=4
                return sam
            if sam>=7.5 and sam<8.5:
                sam=8
                return sam
            if sam>=8.5 and sam<=9.5:
                sam=9
                return sam
        #print(SAM_1.rating)
        SAM_1.rating=SAM(SAM_1.rating)
        #print(SAM_1.rating)
    ImageComponent SAMimage1
      image = images\instruction2image1
      saveStartStop = False
      size = (1,0.75)
      startVal [time (s)] = 0.0
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    SliderComponent SAM_1
      forceEndRoutine = True
      granularity = 0
      pos = (-0.01,-0.4)
      saveStartStop = False
      size = (0.87, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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  Routine SAMpart2
    PolygonComponent polybacksampart2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        def SAM(sam):
            if sam>=4.5 and sam<5.5:
                sam=5
                return sam
            if sam>=5.5 and sam<6.5:
                sam=6
                return sam
            if sam>=6.5 and sam<7.5:
                sam=7
                return sam
            if sam<1.5:
                sam=1
                return sam

            if sam>=1.5 and sam<2.5:
                sam=2
                return sam
            if sam>=2.5 and sam<3.5:
                sam=3
                return sam
            if sam>=3.5 and sam<4.5:
                sam=4
                return sam
            if sam>=7.5 and sam<8.5:
                sam=8
                return sam
            if sam>=8.5 and sam<=9.5:
                sam=9
                return sam
        #print(SAM_2.rating)
        SAM_2.rating=SAM(SAM_2.rating)
        #print(SAM_2.rating)
    ImageComponent SAMimage_2
      image = images\image2ins2
      saveStartStop = False
      size = (1,0.75)
      startVal [time (s)] = 0.0
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    SliderComponent SAM_2
      forceEndRoutine = True
      granularity = 0
      pos = (-0.0075,-0.25)
      saveStartStop = False
      size = (0.73, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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  Routine DES
    PolygonComponent polybakcdes
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent DESForm
      image = des\desq.PNG
      saveStartStop = False
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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    CodeComponent DEScode
      Code Type = Auto->JS
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      Begin Experiment:
        import math
      Each Frame:
        if DES_1.getRating() != None and DES_2.getRating() != None and DES_3.getRating() != None and DES_4.getRating() != None and DES_5.getRating() != None and DES_6.getRating() != None and DES_7.getRating() != None and DES_8.getRating() != None and DES_9.getRating() != None and DES_10.getRating() != None and DES_11.getRating() != None and DES_12.getRating() != None and DES_13.getRating() != None and DES_14.getRating() != None and DES_15.getRating() != None and DES_16.getRating() != None:
            continueRoutine=False
      End Routine:
        def des(DES):
            if DES>=4.5 and DES<5.5:
                DES=3
                return DES
            if DES>=5.5 and DES<6.5:
                DES=2
                return DES
            if DES>=6.5 and DES<=7.5:
                DES=1
                return DES
            if DES<1.5:
                DES=7
                return DES

            if DES>=1.5 and DES<2.5:
                DES=6
                return DES
            if DES>=2.5 and DES<3.5:
                DES=5
                return DES
            if DES>=3.5 and DES<4.5:
                DES=4
                return DES

        DES_16.rating= des(DES_16.rating)
        DES_15.rating= des(DES_15.rating)
        DES_14.rating= des(DES_14.rating)
        DES_13.rating= des(DES_13.rating)
        DES_12.rating= des(DES_12.rating)
        DES_11.rating= des(DES_11.rating)
        DES_10.rating= des(DES_10.rating)
        DES_9.rating= des(DES_9.rating)
        DES_8.rating= des(DES_8.rating)
        DES_7.rating= des(DES_7.rating)
        DES_6.rating= des(DES_6.rating)
        DES_5.rating= des(DES_5.rating)
        DES_4.rating= des(DES_4.rating)
        DES_3.rating= des(DES_3.rating)
        DES_2.rating= des(DES_2.rating)
        DES_1.rating= des(DES_1.rating)
    SliderComponent DES_1
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,0.24)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_2
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,0.21)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_3
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,0.17)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_4
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,0.14)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_5
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, 0.1) 
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_6
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, 0.065)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_7
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, 0.035)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_8
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, 0)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_9
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, -0.035)
      saveStartStop = False
      size = (0.55, 0.02) 
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_10
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, -0.07)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_11
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18, -0.11) 
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_12
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,-0.16)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_13
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,-0.21)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_14
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,-0.25)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_15
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,-0.3)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent DES_16
      forceEndRoutine = False
      granularity = 0
      pos = (-0.18,-0.36)
      saveStartStop = False
      size = (0.55, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (1,2,3,4,5,6,7)
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  Routine instructionDistraction
    PolygonComponent polybackdis
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent distractionImage
      image = images\instructiondistraction
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructionDistractKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine distractionRoutine
    PolygonComponent polybackdistraction
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent distractiontext
      color = black
      letterHeight = 0.1
      pos [set every frame] = $Randompos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $polygon
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  Routine instruction2part2
    PolygonComponent polyback2par2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent instruction2part2image
      image = images\instruction2part2.jpg
      saveStartStop = False
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyinstruction2part2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine DESinstructionn
    PolygonComponent polyback3
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent DESinstructionimage
      image = images\DESinstruction
      saveStartStop = False
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction3key1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruction3
    PolygonComponent polybackinstruction3
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent instruction3image2
      image = images\Instruction 3.jpg
      saveStartStop = False
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction3key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Check
    CodeComponent checkCode
      Code Type = Auto->JS
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      Begin Routine:
        #made by mahnaaz
        # if haye shart

        if len(movieArray)<1 and MovieGenere=="NEUTRAL":
            movieArray.append(MovieName)
            movieG.append(MovieGenere)
            movieType.append(type)
            Varcheck=1

        if len(movieArray)==1 and MovieGenere=="NEUTRAL" and MovieName!=movieArray[0]:
            movieArray.append(MovieName)
            movieG.append(MovieGenere)
            movieType.append(type)
            Varcheck=1

        correctpast=correct
        Npast=negative
        Ppast=posetive
        repeat=0
        constant=True
        if  MovieGenere!="NEUTRAL" and len(movieArray)>1:
            for i in range(len(movieArray)):
                if MovieName==movieArray[i] :
                    constant=False
            if len(movieArray)<20 and type==-1 :
                for j in movieG:
                        if MovieGenere==j:
                            repeat=repeat+1
                if repeat>=3:
                    constant=False
                print(repeat,'r')
            if constant ==True :
                    if MovieGenere!=movieG[len(movieG)-1] and type!=movieType[len(movieType)-1]:
                        if type ==-1 :negative=negative-1
                        if type==1:posetive= posetive-1
                        correct=(negative/2)-1
                        if  posetive > correct:
                            movieArray.append(MovieName)
                            movieG.append(MovieGenere)
                            movieType.append(type)
                            Varcheck=1
                        else :
                            negative=Npast
                            posetive=Ppast
                            corret=correctpast

                      #  print(negative,posetive,correct)
                    if MovieGenere!=movieG[len(movieG)-1] and type==movieType[len(movieType)-1] and type!=movieType[len(movieType)-2] :
                        if type ==-1 :negative=negative-1
                        if type==1:posetive= posetive-1
                        correct=(negative/2)-1
                        if  posetive > correct:
                            movieArray.append(MovieName)
                            movieG.append(MovieGenere)
                            movieType.append(type)
                            Varcheck=1
                        else :
                            negative=Npast
                            posetive=Ppast
                            corret=correctpast

                      #  print(negative,posetive,correct)

        if  MovieGenere=="NEUTRAL" and len(movieArray)==26:
            for i in range(len(movieArray)):
                if MovieName==movieArray[i] :
                    constant=False
            if constant==True  :
                movieArray.append(MovieName)
                movieG.append(MovieGenere)
                movieType.append(type)
                Varcheck=1


        #print(MovieName)

        #print("this is array ", movieArray)

        #print(len(movieArray))
  Routine Normalize
    CodeComponent NormalizeCode
      Code Type = Auto->JS
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      Begin Routine:
        Varcheck=0
        if len(movieArray)==27:
            trials.finished=True
        #print(movieArray)
        #print(len(movieArray))
Flow
  Routine instruction1
  Routine instruction2
  Routine instruction2part2
  Routine DESinstructionn
  Routine instruction4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = moviesfile\video\movies.xlsx
    isTrials = False
    loopType = random
    nReps = 500
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    conditions:
      [OrderedDict([('MovieName', 'happy1.mp4'), ('MovieGenere', 'HAPPY'), ('type', 1)]),
      OrderedDict([('MovieName', 'happy2.mp4'), ('MovieGenere', 'HAPPY'), ('type', 1)]),
      OrderedDict([('MovieName', 'happy3.mp4'), ('MovieGenere', 'HAPPY'), ('type', 1)]),
      OrderedDict([('MovieName', 'happy4.mp4'), ('MovieGenere', 'HAPPY'), ('type', 1)]),
      OrderedDict([('MovieName', 'Blue (1).mpeg'), ('MovieGenere', 'NEUTRAL'), ('type', 0)]),
      OrderedDict([('MovieName', 'Blue (2).mpeg'), ('MovieGenere', 'NEUTRAL'), ('type', 0)]),
      OrderedDict([('MovieName', 'Blue (3).mpeg'), ('MovieGenere', 'NEUTRAL'), ('type', 0)]),
      OrderedDict([('MovieName', 'OnceWereWa.avi'), ('MovieGenere', 'ANGER'), ('type', -1)]),
      OrderedDict([('MovieName', 'The piano.mp4'), ('MovieGenere', 'ANGER'), ('type', -1)]),
      OrderedDict([('MovieName', 'The professional (2).mp4'), ('MovieGenere', 'ANGER'), ('type', -1)])]
    Routine Check
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = $Varcheck
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      Routine PlusRoutine
      Routine ShowMovie
      Routine SAMpart1
      Routine SAMpart2
      Routine DES
      Routine instructionDistraction
      LoopInitiator distractionloop loopType="TrialHandler"
        conditionsFile = distraction.xlsx
        isTrials = False
        loopType = random
        nReps = 2
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        conditions:
          [OrderedDict([('polygon', '∆'), ('Rand', 0.5054600599513726), ('Randompos', -0.29)]),
          OrderedDict([('polygon', '⌂'), ('Rand', 0.2575331400454124), ('Randompos', 0.3)]),
          OrderedDict([('polygon', '◊'), ('Rand', 0.5820494713090971), ('Randompos', 0.25)]),
          OrderedDict([('polygon', '○'), ('Rand', 0.43242143446231984), ('Randompos', -0.36)]),
          OrderedDict([('polygon', '□'), ('Rand', 0.971864317700992), ('Randompos', -0.25)]),
          OrderedDict([('polygon', '→'), ('Rand', 0.6728128461223857), ('Randompos', 0.2)]),
          OrderedDict([('polygon', '∆'), ('Rand', 0.450373292581989), ('Randompos', -0.37)]),
          OrderedDict([('polygon', '□'), ('Rand', 0.9746502763245624), ('Randompos', -0.34)]),
          OrderedDict([('polygon', '⌂'), ('Rand', 0.14826155224223814), ('Randompos', 0.35)]),
          OrderedDict([('polygon', '◊'), ('Rand', 0.5662268870507073), ('Randompos', 0.27)]),
          OrderedDict([('polygon', '∆'), ('Rand', 0.6804501204383359), ('Randompos', -0.15)]),
          OrderedDict([('polygon', '○'), ('Rand', 0.357310917878808), ('Randompos', 0.0)]),
          OrderedDict([('polygon', '→'), ('Rand', 0.05439750237729857), ('Randompos', 0.14)]),
          OrderedDict([('polygon', '→'), ('Rand', 0.10640934916921152), ('Randompos', 0.4)]),
          OrderedDict([('polygon', '∆'), ('Rand', 0.33952475008245986), ('Randompos', -0.199)])]
        Routine distractionRoutine
      LoopTerminator distractionloop
      Routine instruction3
    LoopTerminator trials_2
    Routine Normalize
  LoopTerminator trials
